PsychoPy2experiment version="2024.2.4"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = SimpleRT
  keyboardBackend = ioHub
  runMode = 1
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Routines
  Routine trial
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    PolygonComponent fixation
      fillColor = white
      shape = cross
      size = (10, 10)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      units = pix
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    PolygonComponent target
      fillColor = white
      shape = rectangle
      size = (100,100)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 5.0
      units = pix
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    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.5
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  Routine Instructions
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    TextComponent instructions
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Welcome to this experiment.

        The task is to press the SPACE bar when you see a white square on the screen.

        Press ENTER to start.
    KeyboardComponent key_respInstructions
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 1.0
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  Routine End
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    TextComponent textEnd
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text = Thank You!
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Flow
  Routine Instructions
  LoopInitiator trials loopType="TrialHandler"
    loopType = random
    nReps = 25
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    Routine trial
  LoopTerminator trials
  Routine End
