PsychoPy2experiment version="2024.2.4"
Settings
  Audio lib = ptb
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1440, 900]
  expName = orient_discrim
  keyboardBackend = ioHub
  runMode = 1
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Routines
  Routine trial
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Experiment:
        if random() > 0.5:
            tilt = 0
            corrAns = 'up'
        else:
            if random() > 0.5:
                tilt = randint(1,5)
                corrAns = 'down'
            else:
                tilt = randint(-5,-1)
                corrAns = 'down'
      End Routine:
        trials.addData('tilt', tilt)

        if random() > 0.5:
            tilt = 0
            corrAns = 'up'
        else:
            if random() > 0.5:
                tilt = randint(1,5)
                corrAns = 'down'
            else:
                tilt = randint(-5,-1)
                corrAns = 'down'
    PolygonComponent fixation
      fillColor = white
      shape = cross
      size = (20, 20)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      units = pix
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    GratingComponent grating
      contrast = 0.3
      mask = gauss
      ori [set every repeat] = tilt
      saveStartStop = False
      sf = 5
      size = (0.2, 0.2)
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 0.3
      tex = sin
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    KeyboardComponent key_resp
      allowedKeys = 'up', 'down'
      correctAns = $corrAns
      forceEndRoutine = True
      startVal [time (s)] = 1.0
      storeCorrect = True
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  Routine Introduction
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Welcome to the experiment. Your task is to see if the Gabor patch presented on screen is straight or tilted. If the patch is straight, press the UP arrow key. If it is tilted press the DOWN arrow key.

        Press SPACE to begin
    KeyboardComponent key_resp_intro
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 1.0
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  Routine End
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    TextComponent text_end
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text = Thank you for your participation!
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Flow
  Routine Introduction
  LoopInitiator trials loopType="TrialHandler"
    loopType = random
    nReps = 100
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    Routine trial
  LoopTerminator trials
  Routine End
