PsychoPy2experiment version="2024.2.4"
Settings
  Audio lib = ptb
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1440, 900]
  expName = stroop
  keyboardBackend = ioHub
  runMode = 1
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Routines
  Routine trial_r
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    PolygonComponent fixation
      fillColor = white
      shape = cross
      size = (10, 10)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      units = pix
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    TextComponent stroop
      color [set every repeat] = $color
      letterHeight = 100
      startVal [time (s)] = 1.0
      text [set every repeat] = $word
      units = pix
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    KeyboardComponent key_resp
      allowedKeys = 'y', 'n'
      correctAns = $corr_resp
      forceEndRoutine = True
      startVal [time (s)] = 1.0
      storeCorrect = True
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  Routine Start
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    TextComponent textIntro
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Welcome to the experiment.

        Your task is to evaluate if the word presented on the screen matches the font color it is written in. If both the word and font color match, press the 'Y' key. Otherwise, press the 'N' key.

        Press SPACE to continue
    KeyboardComponent key_resp_intro
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 1.0
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  Routine End
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    TextComponent textThankYou
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text = Thank you for your participation!
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Flow
  Routine Start
  LoopInitiator stroop_loop loopType="TrialHandler"
    conditionsFile = conditions.xlsx
    loopType = random
    nReps = 3
    random seed = 7
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    conditions:
      [{'color': 'red', 'word': 'Red', 'corr_resp': 'y'},
      {'color': 'blue', 'word': 'Green', 'corr_resp': 'n'},
      {'color': 'green', 'word': 'Blue', 'corr_resp': 'n'},
      {'color': 'pink', 'word': 'Pink', 'corr_resp': 'y'},
      {'color': 'purple', 'word': 'Purple', 'corr_resp': 'y'},
      {'color': 'yellow', 'word': 'Orange', 'corr_resp': 'n'},
      {'color': 'orange', 'word': 'Yellow', 'corr_resp': 'n'}]
    Routine trial_r
  LoopTerminator stroop_loop
  Routine End
